{ ion_register("k", 1) }
objref ks, ksvec, ksgate, ksstates, kstransitions, tobj
{
  ksvec = new Vector()
  ksstates = new List()
  kstransitions = new List()
  ks = new KSChan(0)
}
// DmKdr Density Mechanism
// k ohmic ion current
//     ik (mA/cm2) = g_DmKdr * (v - ek)
{
  ks.name("DmKdr")
  ks.ion("k")
  ks.iv_type(0)
  ks.gmax(0)
  ks.erev(0)
}
// g = gmax * m^4
// m' = (minf - m)/mtau
{
  ksstates.append(ks.add_hhstate("m"))
  ksgate = ksstates.object(0).gate
  ksgate.power(4)
  kstransitions.append(ks.trans(ksstates.object(0), ksstates.object(0)))
}
{
  tobj = kstransitions.object(0)
  tobj.type(1)
  tobj.set_f(0, 4, ksvec.c.append(1, -0.0502, -12.85))
  }
  tobj.set_f(1, 7, ksvec.c.resize(1501), -100, 50)
  for i=0, 1500 {tobj.parm(1).x[i] = fscan()}
 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99
 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99
 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99
 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99
 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99
 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99
 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99
 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99
 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99
 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99 3.99
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 2.0345
  {}
{ ksstates.remove_all  kstransitions.remove_all }
{objref ks, ksvec, ksgate, ksstates, kstransitions, tobj}
