proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create axon[14], dendrite[713], soma[3], electrode, axon_ext[2]

proc topol() { local i
  for i = 1, 13 connect axon[i](0), axon[i-1](1)
  for i = 0, 1 connect dendrite[i](0), axon[i](1)
  for i = 2, 3 connect dendrite[i](0), dendrite[1](1)
  connect dendrite[4](0), axon[2](1)
  for i = 5, 6 connect dendrite[i](0), dendrite[2](1)
  for i = 7, 8 connect dendrite[i](0), dendrite[3](1)
  for i = 9, 10 connect dendrite[i](0), dendrite[4](1)
  connect dendrite[11](0), axon[3](1)
  for i = 12, 13 connect dendrite[i](0), dendrite[6](1)
  for i = 14, 15 connect dendrite[i](0), dendrite[9](1)
  for i = 16, 17 connect dendrite[i](0), dendrite[10](1)
  for i = 18, 19 connect dendrite[i](0), dendrite[11](1)
  connect dendrite[20](0), axon[4](1)
  for i = 21, 22 connect dendrite[i](0), dendrite[12](1)
  for i = 23, 24 connect dendrite[i](0), dendrite[13](1)
  for i = 25, 26 connect dendrite[i](0), dendrite[14](1)
  for i = 27, 28 connect dendrite[i](0), dendrite[15](1)
  for i = 29, 30 connect dendrite[i](0), dendrite[16](1)
  for i = 31, 32 connect dendrite[i](0), dendrite[17](1)
  for i = 33, 34 connect dendrite[i](0), dendrite[19](1)
  for i = 35, 36 connect dendrite[i](0), dendrite[20](1)
  connect dendrite[37](0), axon[5](1)
  for i = 38, 39 connect dendrite[i](0), dendrite[23](1)
  for i = 40, 41 connect dendrite[i](0), dendrite[24](1)
  for i = 42, 43 connect dendrite[i](0), dendrite[25](1)
  for i = 44, 45 connect dendrite[i](0), dendrite[28](1)
  for i = 46, 47 connect dendrite[i](0), dendrite[31](1)
  for i = 48, 49 connect dendrite[i](0), dendrite[32](1)
  for i = 50, 51 connect dendrite[i](0), dendrite[35](1)
  connect dendrite[52](0), axon[6](1)
  for i = 53, 54 connect dendrite[i](0), dendrite[37](1)
  for i = 55, 56 connect dendrite[i](0), dendrite[38](1)
  for i = 57, 58 connect dendrite[i](0), dendrite[39](1)
  for i = 59, 60 connect dendrite[i](0), dendrite[41](1)
  for i = 61, 62 connect dendrite[i](0), dendrite[45](1)
  for i = 63, 64 connect dendrite[i](0), dendrite[47](1)
  for i = 65, 66 connect dendrite[i](0), dendrite[49](1)
  for i = 67, 68 connect dendrite[i](0), dendrite[50](1)
  for i = 69, 70 connect dendrite[i](0), dendrite[51](1)
  for i = 71, 72 connect dendrite[i](0), dendrite[52](1)
  connect dendrite[73](0), axon[7](1)
  for i = 74, 76 connect dendrite[i](0), dendrite[54](1)
  for i = 77, 78 connect dendrite[i](0), dendrite[55](1)
  for i = 79, 80 connect dendrite[i](0), dendrite[56](1)
  for i = 81, 82 connect dendrite[i](0), dendrite[58](1)
  for i = 83, 84 connect dendrite[i](0), dendrite[60](1)
  for i = 85, 87 connect dendrite[i](0), dendrite[62](1)
  for i = 88, 89 connect dendrite[i](0), dendrite[66](1)
  for i = 90, 91 connect dendrite[i](0), dendrite[68](1)
  for i = 92, 93 connect dendrite[i](0), dendrite[70](1)
  for i = 94, 95 connect dendrite[i](0), dendrite[71](1)
  for i = 96, 97 connect dendrite[i](0), dendrite[72](1)
  connect dendrite[98](0), axon[8](1)
  for i = 99, 100 connect dendrite[i](0), dendrite[74](1)
  for i = 101, 102 connect dendrite[i](0), dendrite[79](1)
  for i = 103, 104 connect dendrite[i](0), dendrite[82](1)
  for i = 105, 106 connect dendrite[i](0), dendrite[87](1)
  for i = 107, 108 connect dendrite[i](0), dendrite[89](1)
  for i = 109, 110 connect dendrite[i](0), dendrite[91](1)
  for i = 111, 112 connect dendrite[i](0), dendrite[94](1)
  for i = 113, 114 connect dendrite[i](0), dendrite[95](1)
  for i = 115, 116 connect dendrite[i](0), dendrite[96](1)
  for i = 117, 118 connect dendrite[i](0), dendrite[97](1)
  connect dendrite[119](0), axon[9](1)
  for i = 120, 121 connect dendrite[i](0), dendrite[100](1)
  for i = 122, 123 connect dendrite[i](0), dendrite[104](1)
  for i = 124, 125 connect dendrite[i](0), dendrite[106](1)
  for i = 126, 127 connect dendrite[i](0), dendrite[109](1)
  for i = 128, 129 connect dendrite[i](0), dendrite[110](1)
  for i = 130, 131 connect dendrite[i](0), dendrite[111](1)
  for i = 132, 133 connect dendrite[i](0), dendrite[114](1)
  for i = 134, 135 connect dendrite[i](0), dendrite[115](1)
  for i = 136, 137 connect dendrite[i](0), dendrite[116](1)
  for i = 138, 139 connect dendrite[i](0), dendrite[117](1)
  for i = 140, 141 connect dendrite[i](0), dendrite[118](1)
  for i = 142, 143 connect dendrite[i](0), dendrite[119](1)
  connect dendrite[144](0), axon[10](1)
  for i = 145, 146 connect dendrite[i](0), dendrite[123](1)
  for i = 147, 148 connect dendrite[i](0), dendrite[125](1)
  for i = 149, 150 connect dendrite[i](0), dendrite[129](1)
  for i = 151, 152 connect dendrite[i](0), dendrite[130](1)
  for i = 153, 154 connect dendrite[i](0), dendrite[131](1)
  for i = 155, 156 connect dendrite[i](0), dendrite[133](1)
  for i = 157, 158 connect dendrite[i](0), dendrite[134](1)
  for i = 159, 160 connect dendrite[i](0), dendrite[135](1)
  for i = 161, 162 connect dendrite[i](0), dendrite[136](1)
  for i = 163, 164 connect dendrite[i](0), dendrite[137](1)
  for i = 165, 166 connect dendrite[i](0), dendrite[140](1)
  for i = 167, 168 connect dendrite[i](0), dendrite[141](1)
  for i = 169, 170 connect dendrite[i](0), dendrite[142](1)
  for i = 171, 172 connect dendrite[i](0), dendrite[144](1)
  connect dendrite[173](0), axon[11](1)
  for i = 174, 175 connect dendrite[i](0), dendrite[145](1)
  for i = 176, 177 connect dendrite[i](0), dendrite[148](1)
  for i = 178, 179 connect dendrite[i](0), dendrite[149](1)
  for i = 180, 181 connect dendrite[i](0), dendrite[150](1)
  for i = 182, 183 connect dendrite[i](0), dendrite[151](1)
  for i = 184, 185 connect dendrite[i](0), dendrite[152](1)
  for i = 186, 187 connect dendrite[i](0), dendrite[154](1)
  for i = 188, 189 connect dendrite[i](0), dendrite[156](1)
  for i = 190, 191 connect dendrite[i](0), dendrite[159](1)
  for i = 192, 193 connect dendrite[i](0), dendrite[160](1)
  for i = 194, 195 connect dendrite[i](0), dendrite[168](1)
  for i = 196, 197 connect dendrite[i](0), dendrite[169](1)
  for i = 198, 199 connect dendrite[i](0), dendrite[170](1)
  for i = 200, 201 connect dendrite[i](0), dendrite[173](1)
  connect dendrite[202](0), axon[12](1)
  for i = 203, 204 connect dendrite[i](0), dendrite[175](1)
  for i = 205, 206 connect dendrite[i](0), dendrite[177](1)
  for i = 207, 208 connect dendrite[i](0), dendrite[180](1)
  for i = 209, 210 connect dendrite[i](0), dendrite[181](1)
  for i = 211, 212 connect dendrite[i](0), dendrite[182](1)
  for i = 213, 214 connect dendrite[i](0), dendrite[183](1)
  for i = 215, 216 connect dendrite[i](0), dendrite[186](1)
  for i = 217, 218 connect dendrite[i](0), dendrite[187](1)
  for i = 219, 220 connect dendrite[i](0), dendrite[190](1)
  for i = 221, 222 connect dendrite[i](0), dendrite[193](1)
  for i = 223, 224 connect dendrite[i](0), dendrite[194](1)
  for i = 225, 226 connect dendrite[i](0), dendrite[195](1)
  for i = 227, 228 connect dendrite[i](0), dendrite[196](1)
  for i = 229, 230 connect dendrite[i](0), dendrite[197](1)
  for i = 231, 232 connect dendrite[i](0), dendrite[199](1)
  for i = 233, 234 connect dendrite[i](0), dendrite[201](1)
  connect dendrite[235](0), axon[13](1)
  for i = 236, 237 connect dendrite[i](0), dendrite[202](1)
  for i = 238, 239 connect dendrite[i](0), dendrite[204](1)
  for i = 240, 241 connect dendrite[i](0), dendrite[209](1)
  for i = 242, 243 connect dendrite[i](0), dendrite[210](1)
  for i = 244, 245 connect dendrite[i](0), dendrite[213](1)
  for i = 246, 247 connect dendrite[i](0), dendrite[214](1)
  for i = 248, 249 connect dendrite[i](0), dendrite[215](1)
  for i = 250, 251 connect dendrite[i](0), dendrite[217](1)
  for i = 252, 253 connect dendrite[i](0), dendrite[218](1)
  for i = 254, 255 connect dendrite[i](0), dendrite[219](1)
  for i = 256, 257 connect dendrite[i](0), dendrite[220](1)
  for i = 258, 259 connect dendrite[i](0), dendrite[224](1)
  for i = 260, 261 connect dendrite[i](0), dendrite[225](1)
  for i = 262, 263 connect dendrite[i](0), dendrite[226](1)
  for i = 264, 265 connect dendrite[i](0), dendrite[232](1)
  for i = 266, 267 connect dendrite[i](0), dendrite[234](1)
  for i = 268, 269 connect dendrite[i](0), dendrite[235](1)
  for i = 270, 271 connect dendrite[i](0), dendrite[236](1)
  for i = 272, 273 connect dendrite[i](0), dendrite[242](1)
  for i = 274, 275 connect dendrite[i](0), dendrite[251](1)
  for i = 276, 277 connect dendrite[i](0), dendrite[252](1)
  for i = 278, 279 connect dendrite[i](0), dendrite[253](1)
  for i = 280, 281 connect dendrite[i](0), dendrite[254](1)
  for i = 282, 283 connect dendrite[i](0), dendrite[255](1)
  for i = 284, 285 connect dendrite[i](0), dendrite[256](1)
  for i = 286, 287 connect dendrite[i](0), dendrite[257](1)
  for i = 288, 289 connect dendrite[i](0), dendrite[262](1)
  for i = 290, 291 connect dendrite[i](0), dendrite[263](1)
  for i = 292, 293 connect dendrite[i](0), dendrite[265](1)
  for i = 294, 295 connect dendrite[i](0), dendrite[266](1)
  for i = 296, 297 connect dendrite[i](0), dendrite[267](1)
  for i = 298, 299 connect dendrite[i](0), dendrite[268](1)
  for i = 300, 301 connect dendrite[i](0), dendrite[269](1)
  for i = 302, 303 connect dendrite[i](0), dendrite[271](1)
  for i = 304, 305 connect dendrite[i](0), dendrite[273](1)
  for i = 306, 307 connect dendrite[i](0), dendrite[274](1)
  for i = 308, 309 connect dendrite[i](0), dendrite[277](1)
  for i = 310, 311 connect dendrite[i](0), dendrite[278](1)
  for i = 312, 313 connect dendrite[i](0), dendrite[279](1)
  for i = 314, 315 connect dendrite[i](0), dendrite[281](1)
  for i = 316, 317 connect dendrite[i](0), dendrite[282](1)
  for i = 318, 319 connect dendrite[i](0), dendrite[283](1)
  for i = 320, 321 connect dendrite[i](0), dendrite[289](1)
  for i = 322, 323 connect dendrite[i](0), dendrite[291](1)
  for i = 324, 325 connect dendrite[i](0), dendrite[292](1)
  for i = 326, 327 connect dendrite[i](0), dendrite[293](1)
  for i = 328, 329 connect dendrite[i](0), dendrite[297](1)
  for i = 330, 331 connect dendrite[i](0), dendrite[298](1)
  for i = 332, 333 connect dendrite[i](0), dendrite[299](1)
  for i = 334, 335 connect dendrite[i](0), dendrite[300](1)
  for i = 336, 337 connect dendrite[i](0), dendrite[302](1)
  for i = 338, 339 connect dendrite[i](0), dendrite[305](1)
  for i = 340, 341 connect dendrite[i](0), dendrite[307](1)
  for i = 342, 343 connect dendrite[i](0), dendrite[308](1)
  for i = 344, 345 connect dendrite[i](0), dendrite[309](1)
  for i = 346, 347 connect dendrite[i](0), dendrite[313](1)
  for i = 348, 349 connect dendrite[i](0), dendrite[318](1)
  for i = 350, 351 connect dendrite[i](0), dendrite[323](1)
  for i = 352, 354 connect dendrite[i](0), dendrite[324](1)
  for i = 355, 356 connect dendrite[i](0), dendrite[325](1)
  for i = 357, 358 connect dendrite[i](0), dendrite[327](1)
  for i = 359, 360 connect dendrite[i](0), dendrite[328](1)
  for i = 361, 362 connect dendrite[i](0), dendrite[329](1)
  for i = 363, 364 connect dendrite[i](0), dendrite[330](1)
  for i = 365, 366 connect dendrite[i](0), dendrite[331](1)
  for i = 367, 368 connect dendrite[i](0), dendrite[332](1)
  for i = 369, 370 connect dendrite[i](0), dendrite[333](1)
  for i = 371, 372 connect dendrite[i](0), dendrite[336](1)
  for i = 373, 374 connect dendrite[i](0), dendrite[337](1)
  for i = 375, 376 connect dendrite[i](0), dendrite[338](1)
  for i = 377, 378 connect dendrite[i](0), dendrite[339](1)
  for i = 379, 380 connect dendrite[i](0), dendrite[342](1)
  for i = 381, 382 connect dendrite[i](0), dendrite[343](1)
  for i = 383, 384 connect dendrite[i](0), dendrite[346](1)
  for i = 385, 386 connect dendrite[i](0), dendrite[347](1)
  for i = 387, 388 connect dendrite[i](0), dendrite[348](1)
  topol_1()
}
proc topol_1() {
  for i = 389, 390 connect dendrite[i](0), dendrite[349](1)
  for i = 391, 393 connect dendrite[i](0), dendrite[351](1)
  for i = 394, 395 connect dendrite[i](0), dendrite[360](1)
  for i = 396, 397 connect dendrite[i](0), dendrite[361](1)
  for i = 398, 399 connect dendrite[i](0), dendrite[364](1)
  for i = 400, 401 connect dendrite[i](0), dendrite[365](1)
  for i = 402, 403 connect dendrite[i](0), dendrite[366](1)
  for i = 404, 405 connect dendrite[i](0), dendrite[367](1)
  for i = 406, 407 connect dendrite[i](0), dendrite[371](1)
  for i = 408, 409 connect dendrite[i](0), dendrite[374](1)
  for i = 410, 411 connect dendrite[i](0), dendrite[377](1)
  for i = 412, 414 connect dendrite[i](0), dendrite[378](1)
  for i = 415, 416 connect dendrite[i](0), dendrite[384](1)
  for i = 417, 418 connect dendrite[i](0), dendrite[385](1)
  for i = 419, 420 connect dendrite[i](0), dendrite[389](1)
  for i = 421, 422 connect dendrite[i](0), dendrite[391](1)
  for i = 423, 424 connect dendrite[i](0), dendrite[393](1)
  for i = 425, 426 connect dendrite[i](0), dendrite[394](1)
  for i = 427, 428 connect dendrite[i](0), dendrite[399](1)
  for i = 429, 430 connect dendrite[i](0), dendrite[404](1)
  for i = 431, 432 connect dendrite[i](0), dendrite[405](1)
  for i = 433, 434 connect dendrite[i](0), dendrite[408](1)
  for i = 435, 436 connect dendrite[i](0), dendrite[412](1)
  for i = 437, 438 connect dendrite[i](0), dendrite[413](1)
  for i = 439, 440 connect dendrite[i](0), dendrite[414](1)
  for i = 441, 442 connect dendrite[i](0), dendrite[417](1)
  for i = 443, 444 connect dendrite[i](0), dendrite[419](1)
  for i = 445, 446 connect dendrite[i](0), dendrite[422](1)
  for i = 447, 448 connect dendrite[i](0), dendrite[423](1)
  for i = 449, 451 connect dendrite[i](0), dendrite[424](1)
  for i = 452, 453 connect dendrite[i](0), dendrite[426](1)
  for i = 454, 455 connect dendrite[i](0), dendrite[427](1)
  for i = 456, 457 connect dendrite[i](0), dendrite[429](1)
  for i = 458, 459 connect dendrite[i](0), dendrite[431](1)
  for i = 460, 461 connect dendrite[i](0), dendrite[432](1)
  for i = 462, 463 connect dendrite[i](0), dendrite[433](1)
  for i = 464, 465 connect dendrite[i](0), dendrite[435](1)
  for i = 466, 467 connect dendrite[i](0), dendrite[443](1)
  for i = 468, 469 connect dendrite[i](0), dendrite[445](1)
  for i = 470, 471 connect dendrite[i](0), dendrite[448](1)
  for i = 472, 473 connect dendrite[i](0), dendrite[450](1)
  for i = 474, 475 connect dendrite[i](0), dendrite[451](1)
  for i = 476, 477 connect dendrite[i](0), dendrite[454](1)
  for i = 478, 479 connect dendrite[i](0), dendrite[458](1)
  for i = 480, 482 connect dendrite[i](0), dendrite[459](1)
  for i = 483, 484 connect dendrite[i](0), dendrite[460](1)
  for i = 485, 486 connect dendrite[i](0), dendrite[461](1)
  for i = 487, 488 connect dendrite[i](0), dendrite[463](1)
  for i = 489, 490 connect dendrite[i](0), dendrite[464](1)
  for i = 491, 493 connect dendrite[i](0), dendrite[469](1)
  for i = 494, 495 connect dendrite[i](0), dendrite[471](1)
  for i = 496, 497 connect dendrite[i](0), dendrite[475](1)
  for i = 498, 499 connect dendrite[i](0), dendrite[478](1)
  for i = 500, 501 connect dendrite[i](0), dendrite[480](1)
  for i = 502, 503 connect dendrite[i](0), dendrite[483](1)
  for i = 504, 505 connect dendrite[i](0), dendrite[484](1)
  for i = 506, 507 connect dendrite[i](0), dendrite[486](1)
  for i = 508, 509 connect dendrite[i](0), dendrite[488](1)
  for i = 510, 511 connect dendrite[i](0), dendrite[490](1)
  for i = 512, 513 connect dendrite[i](0), dendrite[494](1)
  for i = 514, 516 connect dendrite[i](0), dendrite[495](1)
  for i = 517, 519 connect dendrite[i](0), dendrite[497](1)
  for i = 520, 521 connect dendrite[i](0), dendrite[498](1)
  for i = 522, 523 connect dendrite[i](0), dendrite[501](1)
  for i = 524, 525 connect dendrite[i](0), dendrite[503](1)
  for i = 526, 527 connect dendrite[i](0), dendrite[504](1)
  for i = 528, 529 connect dendrite[i](0), dendrite[505](1)
  for i = 530, 531 connect dendrite[i](0), dendrite[506](1)
  for i = 532, 533 connect dendrite[i](0), dendrite[507](1)
  for i = 534, 535 connect dendrite[i](0), dendrite[516](1)
  for i = 536, 537 connect dendrite[i](0), dendrite[518](1)
  for i = 538, 539 connect dendrite[i](0), dendrite[519](1)
  for i = 540, 541 connect dendrite[i](0), dendrite[525](1)
  for i = 542, 543 connect dendrite[i](0), dendrite[527](1)
  for i = 544, 545 connect dendrite[i](0), dendrite[530](1)
  for i = 546, 547 connect dendrite[i](0), dendrite[531](1)
  for i = 548, 549 connect dendrite[i](0), dendrite[533](1)
  for i = 550, 551 connect dendrite[i](0), dendrite[536](1)
  for i = 552, 553 connect dendrite[i](0), dendrite[537](1)
  for i = 554, 557 connect dendrite[i](0), dendrite[539](1)
  for i = 558, 559 connect dendrite[i](0), dendrite[542](1)
  for i = 560, 561 connect dendrite[i](0), dendrite[543](1)
  for i = 562, 563 connect dendrite[i](0), dendrite[547](1)
  for i = 564, 565 connect dendrite[i](0), dendrite[548](1)
  for i = 566, 567 connect dendrite[i](0), dendrite[549](1)
  for i = 568, 569 connect dendrite[i](0), dendrite[552](1)
  for i = 570, 571 connect dendrite[i](0), dendrite[556](1)
  for i = 572, 573 connect dendrite[i](0), dendrite[557](1)
  for i = 574, 575 connect dendrite[i](0), dendrite[560](1)
  for i = 576, 577 connect dendrite[i](0), dendrite[561](1)
  for i = 578, 579 connect dendrite[i](0), dendrite[564](1)
  for i = 580, 582 connect dendrite[i](0), dendrite[566](1)
  for i = 583, 584 connect dendrite[i](0), dendrite[567](1)
  for i = 585, 586 connect dendrite[i](0), dendrite[569](1)
  for i = 587, 588 connect dendrite[i](0), dendrite[570](1)
  for i = 589, 590 connect dendrite[i](0), dendrite[571](1)
  for i = 591, 592 connect dendrite[i](0), dendrite[572](1)
  for i = 593, 594 connect dendrite[i](0), dendrite[573](1)
  for i = 595, 596 connect dendrite[i](0), dendrite[574](1)
  for i = 597, 598 connect dendrite[i](0), dendrite[576](1)
  for i = 599, 600 connect dendrite[i](0), dendrite[577](1)
  for i = 601, 602 connect dendrite[i](0), dendrite[579](1)
  for i = 603, 604 connect dendrite[i](0), dendrite[580](1)
  for i = 605, 606 connect dendrite[i](0), dendrite[581](1)
  for i = 607, 608 connect dendrite[i](0), dendrite[582](1)
  for i = 609, 610 connect dendrite[i](0), dendrite[583](1)
  for i = 611, 612 connect dendrite[i](0), dendrite[584](1)
  for i = 613, 614 connect dendrite[i](0), dendrite[588](1)
  for i = 615, 616 connect dendrite[i](0), dendrite[589](1)
  for i = 617, 618 connect dendrite[i](0), dendrite[594](1)
  for i = 619, 620 connect dendrite[i](0), dendrite[597](1)
  for i = 621, 622 connect dendrite[i](0), dendrite[599](1)
  for i = 623, 624 connect dendrite[i](0), dendrite[600](1)
  for i = 625, 626 connect dendrite[i](0), dendrite[602](1)
  for i = 627, 628 connect dendrite[i](0), dendrite[604](1)
  for i = 629, 630 connect dendrite[i](0), dendrite[606](1)
  for i = 631, 632 connect dendrite[i](0), dendrite[607](1)
  for i = 633, 634 connect dendrite[i](0), dendrite[609](1)
  for i = 635, 636 connect dendrite[i](0), dendrite[610](1)
  for i = 637, 638 connect dendrite[i](0), dendrite[612](1)
  for i = 639, 640 connect dendrite[i](0), dendrite[614](1)
  for i = 641, 642 connect dendrite[i](0), dendrite[616](1)
  for i = 643, 644 connect dendrite[i](0), dendrite[618](1)
  for i = 645, 646 connect dendrite[i](0), dendrite[621](1)
  for i = 647, 648 connect dendrite[i](0), dendrite[622](1)
  for i = 649, 650 connect dendrite[i](0), dendrite[623](1)
  for i = 651, 652 connect dendrite[i](0), dendrite[624](1)
  for i = 653, 654 connect dendrite[i](0), dendrite[630](1)
  for i = 655, 656 connect dendrite[i](0), dendrite[636](1)
  for i = 657, 658 connect dendrite[i](0), dendrite[637](1)
  for i = 659, 660 connect dendrite[i](0), dendrite[638](1)
  for i = 661, 662 connect dendrite[i](0), dendrite[641](1)
  for i = 663, 664 connect dendrite[i](0), dendrite[644](1)
  for i = 665, 666 connect dendrite[i](0), dendrite[646](1)
  for i = 667, 668 connect dendrite[i](0), dendrite[653](1)
  for i = 669, 670 connect dendrite[i](0), dendrite[656](1)
  for i = 671, 672 connect dendrite[i](0), dendrite[658](1)
  for i = 673, 674 connect dendrite[i](0), dendrite[663](1)
  for i = 675, 676 connect dendrite[i](0), dendrite[664](1)
  for i = 677, 678 connect dendrite[i](0), dendrite[670](1)
  for i = 679, 680 connect dendrite[i](0), dendrite[672](1)
  for i = 681, 682 connect dendrite[i](0), dendrite[674](1)
  for i = 683, 684 connect dendrite[i](0), dendrite[675](1)
  for i = 685, 686 connect dendrite[i](0), dendrite[679](1)
  for i = 687, 688 connect dendrite[i](0), dendrite[682](1)
  for i = 689, 690 connect dendrite[i](0), dendrite[684](1)
  for i = 691, 692 connect dendrite[i](0), dendrite[685](1)
  for i = 693, 694 connect dendrite[i](0), dendrite[688](1)
  for i = 695, 697 connect dendrite[i](0), dendrite[689](1)
  for i = 698, 699 connect dendrite[i](0), dendrite[693](1)
  for i = 700, 701 connect dendrite[i](0), dendrite[696](1)
  for i = 702, 704 connect dendrite[i](0), dendrite[697](1)
  for i = 705, 706 connect dendrite[i](0), dendrite[700](1)
  for i = 707, 708 connect dendrite[i](0), dendrite[703](1)
  for i = 709, 710 connect dendrite[i](0), dendrite[705](1)
  for i = 711, 712 connect dendrite[i](0), dendrite[706](1)
  connect soma(0), axon[13](1)
  for i = 1, 2 connect soma[i](0), soma(1)
  connect electrode(0), soma[1](1)
  connect axon_ext(0), axon(0)
  connect axon_ext[1](0), axon_ext(1)
  basic_shape()
}
proc shape3d_1() {
  axon {pt3dclear()
	pt3dadd(42.1539, 19.7971, 3.44618, 0.897304)
	pt3dadd(42.4647, 20.3123, 3.46066, 0.910348)
	pt3dadd(42.6244, 20.5665, 3.4838, 0.91587)
	pt3dadd(42.8128, 20.7994, 3.51423, 0.913172)
	pt3dadd(42.9942, 21.0362, 3.55485, 0.936222)
	pt3dadd(43.175, 21.2723, 3.6018, 0.972096)
	pt3dadd(43.3641, 21.5018, 3.64886, 1.00092)
	pt3dadd(43.5377, 21.7424, 3.69983, 1.01629)
	pt3dadd(43.7127, 21.9807, 3.75593, 1.01185)
	pt3dadd(43.8948, 22.2148, 3.80686, 1.00598)
	pt3dadd(44.0739, 22.4529, 3.84922, 1.02611)
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  }
}
proc shape3d_2() {
  dendrite[21] {	pt3dadd(46.8882, 27.6159, 2.26407, 0.684454)
	pt3dadd(46.6952, 27.4084, 2.21367, 0.679786)
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  }
}
proc shape3d_3() {
  dendrite[48] {	pt3dadd(44.6796, 30.0078, 8.45456, 0.779118)
	pt3dadd(44.7706, 29.9701, 8.71883, 0.729274)
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  }
}
proc shape3d_4() {
  dendrite[74] {	pt3dadd(41.9058, 31.694, 6.61137, 0.926298)
	pt3dadd(41.6408, 31.7904, 6.64178, 0.90999)
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  }
}
proc shape3d_5() {
  dendrite[101] {  }
  dendrite[102] {pt3dclear()
	pt3dadd(52.0891, 37.0579, 6.4377, 0.711062)
	pt3dadd(52.2533, 36.926, 6.29801, 0.683198)
	pt3dadd(52.4198, 36.774, 6.14928, 0.674072)
	pt3dadd(52.5845, 36.6104, 5.99427, 0.678278)
  }
  dendrite[103] {pt3dclear()
	pt3dadd(54.6998, 30.8302, 4.19757, 0.671724)
	pt3dadd(54.5881, 31.0418, 4.33612, 0.655084)
	pt3dadd(54.4554, 31.2534, 4.48589, 0.644286)
	pt3dadd(54.2941, 31.4507, 4.64643, 0.635628)
	pt3dadd(54.1079, 31.6236, 4.81592, 0.646956)
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  }
}
proc shape3d_6() {
  dendrite[133] {  }
  dendrite[134] {pt3dclear()
	pt3dadd(51.792, 28.7099, 9.67783, 0.772516)
	pt3dadd(51.7083, 28.6948, 9.88388, 0.721598)
	pt3dadd(51.6303, 28.686, 10.1165, 0.673064)
	pt3dadd(51.5671, 28.6761, 10.3738, 0.624082)
	pt3dadd(51.5255, 28.6486, 10.6505, 0.60969)
	pt3dadd(51.5193, 28.62, 10.9419, 0.619904)
	pt3dadd(51.5248, 28.6256, 11.2444, 0.629802)
	pt3dadd(51.5163, 28.6649, 11.5549, 0.648158)
	pt3dadd(51.5325, 28.7443, 11.8709, 0.719028)
  }
  dendrite[135] {pt3dclear()
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  }
}
proc shape3d_7() {
  dendrite[165] {  }
  dendrite[166] {pt3dclear()
	pt3dadd(52.9927, 27.8524, 7.70148, 0.687334)
	pt3dadd(53.1631, 28.1286, 7.50656, 0.695846)
  }
  dendrite[167] {pt3dclear()
	pt3dadd(52.1426, 26.9634, 8.84757, 0.744358)
	pt3dadd(52.3333, 27.0927, 8.96386, 0.758606)
	pt3dadd(52.5526, 27.2205, 9.07077, 0.7601)
	pt3dadd(52.7742, 27.3631, 9.18431, 0.75719)
	pt3dadd(52.9949, 27.5172, 9.29854, 0.754614)
  }
  dendrite[168] {pt3dclear()
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  }
}
proc shape3d_8() {
  dendrite[193] {	pt3dadd(56.579, 27.5562, 13.8676, 0.743982)
  }
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  }
}
proc shape3d_9() {
  dendrite[215] {	pt3dadd(47.7275, 26.0478, 10.7022, 0.722364)
  }
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  }
}
proc shape3d_10() {
  dendrite[244] {  }
  dendrite[245] {pt3dclear()
	pt3dadd(49.8911, 18.7454, 6.24136, 0.680032)
	pt3dadd(49.6538, 18.8485, 6.28624, 0.677872)
	pt3dadd(49.4069, 18.9832, 6.33874, 0.680124)
	pt3dadd(49.1606, 19.1423, 6.38514, 0.677136)
	pt3dadd(48.9172, 19.3108, 6.43807, 0.662734)
	pt3dadd(48.6841, 19.4936, 6.49499, 0.644218)
	pt3dadd(48.462, 19.6875, 6.55861, 0.628246)
	pt3dadd(48.2539, 19.8889, 6.64054, 0.632904)
	pt3dadd(48.0642, 20.1017, 6.73506, 0.644456)
	pt3dadd(47.8963, 20.3205, 6.85318, 0.648452)
	pt3dadd(47.7435, 20.5353, 6.99702, 0.64281)
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  }
}
proc shape3d_11() {
  dendrite[264] {  }
  dendrite[265] {pt3dclear()
	pt3dadd(47.1984, 33.3206, 9.69575, 1.05605)
	pt3dadd(46.9998, 33.3723, 9.86738, 1.06736)
	pt3dadd(46.7981, 33.4462, 10.0403, 1.0459)
	pt3dadd(46.6073, 33.5294, 10.2228, 1.0168)
	pt3dadd(46.4429, 33.6245, 10.4173, 0.996262)
  }
  dendrite[266] {pt3dclear()
	pt3dadd(46.0183, 34.422, 4.95777, 0.919608)
	pt3dadd(45.7777, 34.3441, 4.91664, 0.9338)
	pt3dadd(45.5308, 34.2584, 4.88627, 0.92149)
	pt3dadd(45.2788, 34.1639, 4.86653, 0.90528)
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  }
}
proc shape3d_12() {
  dendrite[290] {	pt3dadd(52.8189, 22.102, 8.38633, 0.805274)
	pt3dadd(52.6946, 21.8765, 8.53844, 0.803328)
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  }
}
proc shape3d_13() {
  dendrite[314] {	pt3dadd(56.3365, 32.2511, 14.5358, 0.803388)
	pt3dadd(56.1351, 32.4125, 14.7065, 0.806962)
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  }
}
proc shape3d_14() {
  dendrite[335] {	pt3dadd(47.6983, 51.4277, 9.87152, 0.889908)
	pt3dadd(47.5935, 51.1919, 9.72095, 0.907104)
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  }
}
proc shape3d_15() {
  dendrite[363] {  }
  dendrite[364] {pt3dclear()
	pt3dadd(48.2135, 61.1657, 9.38235, 0.832416)
	pt3dadd(48.464, 60.9409, 9.46283, 0.815152)
	pt3dadd(48.6878, 60.7129, 9.53194, 0.79059)
	pt3dadd(48.8878, 60.4736, 9.58421, 0.779942)
  }
  dendrite[365] {pt3dclear()
	pt3dadd(48.9333, 63.2709, 8.67305, 0.78478)
	pt3dadd(49.0894, 63.2287, 8.83473, 0.791928)
	pt3dadd(49.2387, 63.2125, 9.02711, 0.776826)
  }
  dendrite[366] {pt3dclear()
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  }
}
proc shape3d_16() {
  dendrite[388] {	pt3dadd(64.4419, 27.9149, 15.0893, 0.905254)
	pt3dadd(64.5016, 27.6239, 15.1239, 0.896504)
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  }
}
proc shape3d_17() {
  dendrite[413] {	pt3dadd(60.2508, 26.6923, 4.61006, 0.814522)
	pt3dadd(60.5483, 26.6431, 4.56974, 0.804904)
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  }
}
proc shape3d_18() {
  dendrite[435] {	pt3dadd(58.4554, 27.5671, 4.79658, 0.666476)
	pt3dadd(58.7009, 27.6037, 4.67154, 0.659574)
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  }
}
proc shape3d_19() {
  dendrite[462] {	pt3dadd(51.1512, 50.1309, 9.33976, 0.74916)
	pt3dadd(51.2687, 50.1199, 9.60801, 0.777486)
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  }
}
proc shape3d_20() {
  dendrite[488] {	pt3dadd(49.3594, 54.333, 11.4738, 0.684826)
	pt3dadd(49.409, 54.5929, 11.5922, 0.692962)
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  }
}
proc shape3d_21() {
  dendrite[516] {	pt3dadd(53.5846, 14.8513, 7.3111, 0.77102)
	pt3dadd(53.4745, 14.5843, 7.40257, 0.746288)
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  }
}
proc shape3d_22() {
  dendrite[537] {	pt3dadd(59.2997, 18.4828, 6.15079, 0.76607)
	pt3dadd(59.3586, 18.7698, 6.06329, 0.741034)
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  }
}
proc shape3d_23() {
  dendrite[562] {	pt3dadd(55.5914, 76.1112, 9.45354, 0.760902)
	pt3dadd(55.819, 75.95, 9.36082, 0.748326)
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  }
}
proc shape3d_24() {
  dendrite[589] {	pt3dadd(61.4854, 13.0566, 7.9227, 0.780548)
	pt3dadd(61.5851, 12.7996, 8.05931, 0.804148)
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  }
}
proc shape3d_25() {
  dendrite[622] {	pt3dadd(46.6924, 80.0265, 12.5038, 0.677592)
	pt3dadd(46.647, 80.3256, 12.52, 0.676424)
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  }
}
proc shape3d_26() {
  dendrite[651] {	pt3dadd(48.2542, 78.2466, 12.501, 0.640888)
	pt3dadd(48.0692, 78.0191, 12.617, 0.631372)
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  }
}
proc shape3d_27() {
  dendrite[688] {	pt3dadd(65.6695, 21.9204, 6.52274, 0.720948)
	pt3dadd(65.6898, 22.1993, 6.4783, 0.72162)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  electrode {pt3dclear() pt3dadd(42, 51, 0, 1) pt3dadd(30, 45, 0, 1)}
  axon_ext {pt3dclear() pt3dadd(42, 20, 0, 1) pt3dadd(30, 15, 0, 1)}
  axon_ext[1] {pt3dclear() pt3dadd(30, 15, 0, 1) pt3dadd(30, 105, 0, 1)}
}

objref all, topdendrite, bottomdendrite, axonic, somatic, bottomdendritelessaxon, topaxonic
objref topdendrite_lessaxon, test, SIZ11, SIZ_m12, SIZ_m8, SIZ_m1, soma_dendrites
objref electrodic, ext_axonic, syn1
proc subsets() { local i
  objref all, topdendrite, bottomdendrite, axonic, somatic, bottomdendritelessaxon, topaxonic
  objref topdendrite_lessaxon, test, SIZ11, SIZ_m12, SIZ_m8, SIZ_m1, soma_dendrites
  objref electrodic, ext_axonic, syn1
  all = new SectionList()
    for i=0, 13 axon[i] all.append()
    for i=0, 712 dendrite[i] all.append()
    for i=0, 2 soma[i] all.append()
    electrode all.append()
    for i=0, 1 axon_ext[i] all.append()

  topdendrite = new SectionList()
    dendrite[235] topdendrite.append()
    for i=268, 269 dendrite[i] topdendrite.append()
    for i=298, 301 dendrite[i] topdendrite.append()
    for i=330, 335 dendrite[i] topdendrite.append()
    for i=363, 370 dendrite[i] topdendrite.append()
    for i=398, 405 dendrite[i] topdendrite.append()
    for i=427, 432 dendrite[i] topdendrite.append()
    for i=454, 461 dendrite[i] topdendrite.append()
    for i=476, 486 dendrite[i] topdendrite.append()
    for i=498, 507 dendrite[i] topdendrite.append()
    for i=520, 533 dendrite[i] topdendrite.append()
    for i=540, 549 dendrite[i] topdendrite.append()
    for i=558, 567 dendrite[i] topdendrite.append()
    for i=574, 584 dendrite[i] topdendrite.append()
    for i=595, 612 dendrite[i] topdendrite.append()
    for i=619, 638 dendrite[i] topdendrite.append()
    for i=645, 660 dendrite[i] topdendrite.append()
    for i=665, 672 dendrite[i] topdendrite.append()
    for i=677, 680 dendrite[i] topdendrite.append()
    for i=685, 686 dendrite[i] topdendrite.append()
    for i=691, 692 dendrite[i] topdendrite.append()

  bottomdendrite = new SectionList()
    for i=0, 13 axon[i] bottomdendrite.append()
    for i=0, 234 dendrite[i] bottomdendrite.append()
    for i=236, 267 dendrite[i] bottomdendrite.append()
    for i=270, 297 dendrite[i] bottomdendrite.append()
    for i=302, 329 dendrite[i] bottomdendrite.append()
    for i=336, 362 dendrite[i] bottomdendrite.append()
    for i=371, 397 dendrite[i] bottomdendrite.append()
    for i=406, 426 dendrite[i] bottomdendrite.append()
    for i=433, 453 dendrite[i] bottomdendrite.append()
    for i=462, 475 dendrite[i] bottomdendrite.append()
    for i=487, 497 dendrite[i] bottomdendrite.append()
    for i=508, 519 dendrite[i] bottomdendrite.append()
    for i=534, 539 dendrite[i] bottomdendrite.append()
    for i=550, 557 dendrite[i] bottomdendrite.append()
    for i=568, 573 dendrite[i] bottomdendrite.append()
    for i=585, 594 dendrite[i] bottomdendrite.append()
    for i=613, 618 dendrite[i] bottomdendrite.append()
    for i=639, 644 dendrite[i] bottomdendrite.append()
    for i=661, 664 dendrite[i] bottomdendrite.append()
    for i=673, 676 dendrite[i] bottomdendrite.append()
    for i=681, 684 dendrite[i] bottomdendrite.append()
    for i=687, 690 dendrite[i] bottomdendrite.append()
    for i=693, 712 dendrite[i] bottomdendrite.append()
    soma bottomdendrite.append()

  axonic = new SectionList()
    for i=0, 13 axon[i] axonic.append()

  somatic = new SectionList()
    for i=0, 2 soma[i] somatic.append()

  bottomdendritelessaxon = new SectionList()
    for i=0, 234 dendrite[i] bottomdendritelessaxon.append()
    for i=236, 267 dendrite[i] bottomdendritelessaxon.append()
    for i=270, 297 dendrite[i] bottomdendritelessaxon.append()
    for i=302, 329 dendrite[i] bottomdendritelessaxon.append()
    for i=336, 362 dendrite[i] bottomdendritelessaxon.append()
    for i=371, 397 dendrite[i] bottomdendritelessaxon.append()
    for i=406, 426 dendrite[i] bottomdendritelessaxon.append()
    for i=433, 453 dendrite[i] bottomdendritelessaxon.append()
    for i=462, 475 dendrite[i] bottomdendritelessaxon.append()
    for i=487, 497 dendrite[i] bottomdendritelessaxon.append()
    for i=508, 519 dendrite[i] bottomdendritelessaxon.append()
    for i=534, 539 dendrite[i] bottomdendritelessaxon.append()
    for i=550, 557 dendrite[i] bottomdendritelessaxon.append()
    for i=568, 573 dendrite[i] bottomdendritelessaxon.append()
    for i=585, 594 dendrite[i] bottomdendritelessaxon.append()
    for i=613, 618 dendrite[i] bottomdendritelessaxon.append()
    for i=639, 644 dendrite[i] bottomdendritelessaxon.append()
    for i=661, 664 dendrite[i] bottomdendritelessaxon.append()
    for i=673, 676 dendrite[i] bottomdendritelessaxon.append()
    for i=681, 684 dendrite[i] bottomdendritelessaxon.append()
    for i=687, 690 dendrite[i] bottomdendritelessaxon.append()
    for i=693, 712 dendrite[i] bottomdendritelessaxon.append()

  topaxonic = new SectionList()
    dendrite[235] topaxonic.append()
    dendrite[268] topaxonic.append()
    dendrite[299] topaxonic.append()
    dendrite[332] topaxonic.append()
    dendrite[367] topaxonic.append()
    dendrite[405] topaxonic.append()
    dendrite[432] topaxonic.append()
    dendrite[461] topaxonic.append()
    dendrite[486] topaxonic.append()
    dendrite[507] topaxonic.append()
    dendrite[533] topaxonic.append()
    dendrite[549] topaxonic.append()
    dendrite[567] topaxonic.append()

  topdendrite_lessaxon = new SectionList()
    dendrite[269] topdendrite_lessaxon.append()
    dendrite[298] topdendrite_lessaxon.append()
    for i=300, 301 dendrite[i] topdendrite_lessaxon.append()
    for i=330, 331 dendrite[i] topdendrite_lessaxon.append()
    for i=333, 335 dendrite[i] topdendrite_lessaxon.append()
    for i=363, 366 dendrite[i] topdendrite_lessaxon.append()
    for i=368, 370 dendrite[i] topdendrite_lessaxon.append()
    for i=398, 404 dendrite[i] topdendrite_lessaxon.append()
    for i=427, 431 dendrite[i] topdendrite_lessaxon.append()
    for i=454, 460 dendrite[i] topdendrite_lessaxon.append()
    for i=476, 485 dendrite[i] topdendrite_lessaxon.append()
    for i=498, 506 dendrite[i] topdendrite_lessaxon.append()
    for i=520, 532 dendrite[i] topdendrite_lessaxon.append()
    for i=540, 548 dendrite[i] topdendrite_lessaxon.append()
    for i=558, 566 dendrite[i] topdendrite_lessaxon.append()
    for i=574, 584 dendrite[i] topdendrite_lessaxon.append()
    for i=595, 612 dendrite[i] topdendrite_lessaxon.append()
    for i=619, 638 dendrite[i] topdendrite_lessaxon.append()
    for i=645, 660 dendrite[i] topdendrite_lessaxon.append()
    for i=665, 672 dendrite[i] topdendrite_lessaxon.append()
    for i=677, 680 dendrite[i] topdendrite_lessaxon.append()
    for i=685, 686 dendrite[i] topdendrite_lessaxon.append()
    for i=691, 692 dendrite[i] topdendrite_lessaxon.append()

  test = new SectionList()
    for i=12, 13 axon[i] test.append()
    dendrite[357] test.append()

  SIZ11 = new SectionList()
    for i=0, 11 axon[i] SIZ11.append()

  SIZ_m12 = new SectionList()
    for i=0, 11 axon[i] SIZ_m12.append()

  SIZ_m8 = new SectionList()
    for i=0, 7 axon[i] SIZ_m8.append()

  SIZ_m1 = new SectionList()
    axon SIZ_m1.append()

  soma_dendrites = new SectionList()
    for i=0, 13 axon[i] soma_dendrites.append()
    for i=0, 712 dendrite[i] soma_dendrites.append()
    for i=0, 2 soma[i] soma_dendrites.append()

  electrodic = new SectionList()
    electrode electrodic.append()

  ext_axonic = new SectionList()
    for i=0, 1 axon_ext[i] ext_axonic.append()

  syn1 = new SectionList()
    for i=12, 13 axon[i] syn1.append()
    dendrite[357] syn1.append()

}
proc geom() {
  forsec all {  }
  forsec ext_axonic {  }
   axon_ext.L = 70
   axon_ext[1].L = 500
   axon_ext.diam = 0.8
   axon_ext[1].diam = 0.7
  electrode {  L = 10  diam = 1  }
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.999)/2)*2 + 1  }
}
proc biophys() {
  forsec all {
    insert pas
      g_pas = 1e-06
      e_pas = -85
    Ra = 189
    cm = 0.7
    insert DmKdr
      gmax_DmKdr = 1e-06
  }
  electrode {
    Ra = 217.55
    cm = 4.8
    insert pas
      g_pas = 0.000777
      e_pas = 0
  }
  axon_ext[1] {
    insert pas
      g_pas = 0.00012
      e_pas = -85
    insert DmNaT
      gmax_DmNaT = 0.24
    insert DmNaP
      gmax_DmNaP = 0.00011
    insert DmKdr
      gmax_DmKdr = 0.85
  }
}
access axon

celldef()
